PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = fNIRS_3tasks
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welcome!
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    KeyboardComponent skip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine solo_brainstorming
  Routine solo
    ImageComponent task
      image = CREATURE_PLEIN-ECRAN.png
      size = (2, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 600
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    KeyboardComponent skip3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(x=[1]) # trigger 1 for phase 1, solo brainstorming
  Routine baseline
    ImageComponent crosshair
      color = -1.0000, -1.0000, -1.0000
      image = crosshair-black.png
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    KeyboardComponent skip2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please focus on the cross for 30 seconds
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    KeyboardComponent skip1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Now we would like for you to take a look at the imaginary animal and brainstorm for 8-10 minutes. 
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    KeyboardComponent skipp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline_correct
    ImageComponent image
      image = crosshair-black.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent skippp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        print('calling push_sample(x=[0])')
        outlet.push_sample(x=[0]) # trigger 0 for baseline
        print('done')
  Routine checkLSL
    TextComponent text_lsl
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test LSL Connection in Aurora before continuing

        Make sure subject is ready

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine collaborative
  Routine info3
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Now is the time to talk and share ideas! We'll be asking what ideas you brought up together!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine checkLSL
  Routine welcome
  Routine info
  Routine baseline_correct
  Routine info2
  Routine solo
  Routine info
  Routine baseline_correct
  Routine info3
  Routine collaborative
